CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<UserInitials>[a-zA-Z][a-zA-Z])(?P<ExpNumber>[0-9].*)_(?P<Treatment>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Raw_Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Raw_Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Raw_Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Click the "?" on the Rescaling Method row for explanation to move from 16--> 12 bit representation']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
    Select the input image:Raw_Hoechst
    Name the output image:RescaleIntensity_Hoechst
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:6|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
    Select the input image:Raw_Actin
    Name the output image:RescaleIntensity_Actin
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:7|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
    Select the input image:Raw_Mito
    Name the output image:RescaleIntensity_Mito
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
MedianFilter:[module_num:8|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
    Select the input image:Raw_Hoechst
    Name the output image:MedianFilter_Hoechst
    Window:3

Threshold:[module_num:9|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
    Select the input image:MedianFilter_Hoechst
    Name the output image:Threshold_Hoechst
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:300
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:10|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notes:['find nuclei']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
    Select the input image:MedianFilter_Hoechst
    Name the primary objects to be identified:IdentifyPrimaryObjects_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:300
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:IdentifyPrimaryObjects_Nuclei
    Name the objects to be identified:IdentifySecondaryObjects_WholeCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensity_Actin
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:300
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    Thresholding method:Minimum Cross-Entropy
