CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Play around with it. You can usually get pretty far with just using "(?P<MetaDataColumnName>.*)" to get what you want']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:MAX_(?P<UserInitials>[a-zA-Z][a-zA-Z])(?P<ExpNumber>[0-9].*)_(?P<Treatment>.*)_ROI_(?P<ROINumber>[0-9].*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Raw_Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Raw_Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Raw_Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Click the "?" on the Rescaling Method row for explanation to move from 16--> 12 bit representation']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
    Select the input image:Raw_Hoechst
    Name the output image:RescaleIntensity_Hoechst
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:6|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
    Select the input image:Raw_Actin
    Name the output image:RescaleIntensity_Actin
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:7|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
    Select the input image:Raw_Mito
    Name the output image:RescaleIntensity_Mito
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
MedianFilter:[module_num:8|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
    Select the input image:Raw_Hoechst
    Name the output image:MedianFilter_Hoechst
    Window:3

MedianFilter:[module_num:9|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
    Select the input image:RescaleIntensity_Actin
    Name the output image:MedianFilter_Actin
    Window:4

Threshold:[module_num:10|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
    Select the input image:MedianFilter_Hoechst
    Name the output image:Threshold_Hoechst
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.,1
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

Threshold:[module_num:11|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
    Select the input image:MedianFilter_Actin
    Name the output image:Threshold_Actin
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.1,1
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    Log transform before thresholding?:No
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    Size of adaptive window:200
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:12|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notes:['find nuclei']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
    Select the input image:MedianFilter_Hoechst
    Name the primary objects to be identified:IdentifyPrimaryObjects_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:80
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:IdentifyPrimaryObjects_Nuclei
    Name the objects to be identified:IdentifySecondaryObjects_WholeCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MedianFilter_Actin
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:70
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    Thresholding method:Minimum Cross-Entropy

MeasureImageQuality:[module_num:14|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:150
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:IdentifySecondaryObjects_WholeCells
    Name the output image:CellImage
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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notes:['this saves the cell image masks. designate the correct output folder if you want to save this data. Probably not necessary for you unless to do some independent processing in matlab or something like I do']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw_Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMask
    Saved file format:tiff
    Output file location:Same folder as image|Dispersion Indices and Autophagy Processing\\9_21_23_Confocal_Imaging_Mitochondria
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyTertiaryObjects:[module_num:17|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notes:['create cytoplasm masks']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
    Select the larger identified objects:IdentifySecondaryObjects_WholeCells
    Select the smaller identified objects:IdentifyPrimaryObjects_Nuclei
    Name the tertiary objects to be identified:Cytoplasm_Cells
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensityDistribution:[module_num:18|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
    Select images to measure:RescaleIntensity_Mito
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:IdentifySecondaryObjects_WholeCells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:IdentifyPrimaryObjects_Nuclei
    Scale the bins?:No
    Number of bins:30
    Maximum radius:50
    Image:None
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:No
    Output image name:Heatmap

MeasureImageIntensity:[module_num:19|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
    Select images to measure:Raw_Mito, RescaleIntensity_Mito
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cytoplasm_Cells
    Calculate custom percentiles:No
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
MeasureGranularity:[module_num:20|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enabled:False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
    Measure within objects?:Yes
    Select objects to measure:IdentifySecondaryObjects_Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:40
    Range of the granular spectrum:32

MeasureObjectIntensity:[module_num:21|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enabled:False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
    Select images to measure:RescaleIntensity_Mito
    Select objects to measure:Cytoplasm_Cells, IdentifyPrimaryObjects_Nuclei

MeasureTexture:[module_num:22|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enabled:False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
    Select images to measure:RescaleIntensity_488
    Select objects to measure:IdentifySecondaryObjects_Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:8

MeasureObjectSizeShape:[module_num:23|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enabled:False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
    Select object sets to measure:Cytoplasm_Cells, IdentifyPrimaryObjects_Nuclei, IdentifySecondaryObjects_WholeCells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

RelateObjects:[module_num:24|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notes:['relate gfp masked gfp puncta -- this assigns puncta to the cells that they are sitting inside. You can do cytoplasm or Whole cell. Whole cell is probably ok if you are using a Zprojection.']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enabled:False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
    Parent objects:Cytoplasm_Cells
    Child objects:IdentifyPrimaryObjects_LC3_488
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_Cytoplasm_LC3_488
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
RelateObjects:[module_num:25|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notes:['Relate gfp masked ab puncta -- this assigns puncta to the cells that they are sitting inside. You can do cytoplasm or Whole cell. Whole cell is probably ok if you are using a Zprojection.']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enabled:False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
    Parent objects:Cytoplasm_Cells
    Child objects:IdentifyPrimaryObjects_LC3_647
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_Cytoplasm_LC3_647
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
MeasureColocalization:[module_num:26|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notes:['colocalization within cells']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enabled:False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
    Select images to measure:Raw_Mito, RescaleIntensity_Mito
    Set threshold as percentage of maximum intensity for the images:20
    Select where to measure correlation:Within objects
    Select objects to measure:Cytoplasm_Cells, IdentifyPrimaryObjects_Nuclei, IdentifySecondaryObjects_WholeCells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|SZ126
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_Overflow,IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_18of30,IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_22of30,IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_17of30,IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_15of30,IdentifySecondaryObjects_WholeCells|RadialDistribution_FracAtD_RescaleIntensity_Mito_30of30,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SZ126_normoxia_center
    Overwrite existing files without warning?:No
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